'<ADbasic Header, Headerversion 001.001>
' Process_Number                 = 8
' Initial_Processdelay           = 1000
' Eventsource                    = Timer
' Control_long_Delays_for_Stop   = No
' Priority                       = High
' Version                        = 1
' ADbasic_Version                = 6.0.0
' Optimize                       = Yes
' Optimize_Level                 = 1
' Stacksize                      = 1000
' Info_Last_Save                 = MEETPC113  MEETPC113\LION
'<Header End>
'Short routine for acquiring two analog signals in parallel or a single one with a high temporal resolution.
' The employed ADC is 14-bit
#include .\globals.inc
dim data_QPDx[500000] as long
dim data_QPDy[500000] as long
dim data_QPDz[500000] as long

dim i as integer
dim j as integer
init:
  i = 0
  j = 1
event:
  SelectCase j
    case CASE_DAC 'Acquires X and Y channels
      Par_80 = 1
      if (i<Par_78+1) then
        data_QPDx[i] = ADC12(1,4) 'QPDx
        i = i + 1
      else
        j = 2
        i = 0
      endif
    case CASE_ADC 'Acquires X and Y channels
      Par_80 = 2
      if (i<Par_78+1) then
        data_QPDy[i] = ADC12(4,4) 'QPDy
        i = i + 1
      else
        j = 3
        i = 0
      endif
    case CASE_ACQ ' Acquiring Z
      Par_80 = 3
      if (i<Par_78+1) then
        data_QPDz[i] = ADC12(7,2) 'QPDz
        i = i + 1
      else
        end
      endif
  EndSelect
